		/////// Recording variables//////////////
printf("---------- from Record.hoc--------------")
objref savdata
savdata = new File()
savdata.wopen("TwoNeurons_membPot_at_AandB.txt")
savdata.printf("t\tsomaA.v\tsomaB.v\n")
savdata.printf("%d\n",tvec.size())
for i=0,tvec.size()-1 {
savdata.printf("%g\t%g\t%g\t%g\t%g\t%g\t%g\n",tvec.x(i), vvecA.x(i), vvecB.x(i), condA.x(i), condAB.x(i), iA.x(i), iAB.x(i)) }
savdata.close()
objref savinfo
savinfo = new File()
savinfo.wopen("TwoNeurons_Info.txt")
savinfo.printf("Infomation on parameters*********\n")
savinfo.close()
printf("---------- done!--------------")
